PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay discounting again
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent background
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent choose_text
      letterHeight = 0.1
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = Choose One!
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    TextComponent fixed_text
      color = 0.8824, 0.8039, 0.0980
      letterHeight = 0.03
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $FixedEntry
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    PolygonComponent polygon_1
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (-0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent Variable_text
      color = 0.8824, 0.8039, 0.0980
      letterHeight = 0.03
      pos = (0.4,0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every repeat] = $VariableEntry
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    PolygonComponent polygon_2
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0.4, 0)
      shape = rectangle
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    MouseComponent mouse
      clickable = polygon_1,polygon_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timer_text.text = ''
      Each Frame:
        timer_text.text = str(round(15-routineTimer.getTime()))
    TextComponent timer_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
      text [set every frame] = $round(15.0 - t, ndigits = 1)
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  Routine blank
    PolygonComponent blank_polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = temp (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'FixedEntry': '500 Rupees Immediately', 'VariableEntry': '1500 Rupees in 60 Days', 'Reward_today': 500, 'Future_reward': 1500, 'delay': 60},
      {'FixedEntry': '500 Rupees in 90 Days', 'VariableEntry': '500 Rupees Immediately', 'Reward_today': 500, 'Future_reward': 500, 'delay': 90},
      {'FixedEntry': '500 Rupees Immediately', 'VariableEntry': '5000 Rupees in 90 Days', 'Reward_today': 500, 'Future_reward': 5000, 'delay': 90},
      {'FixedEntry': '3000 Rupees in 90 Days', 'VariableEntry': '500 Rupees Immediately', 'Reward_today': 500, 'Future_reward': 3000, 'delay': 90},
      {'FixedEntry': '400 Rupees Immediately', 'VariableEntry': '500 Rupees in 90 Days', 'Reward_today': 400, 'Future_reward': 500, 'delay': 90},
      {'FixedEntry': '3000 Rupees in 60 Days', 'VariableEntry': '400 Rupees Immediately', 'Reward_today': 400, 'Future_reward': 3000, 'delay': 60},
      {'FixedEntry': '500 Rupees Immediately', 'VariableEntry': '1000 Rupees in 180 Days', 'Reward_today': 500, 'Future_reward': 1000, 'delay': 180},
      {'FixedEntry': '4000 Rupees in 180 Days', 'VariableEntry': '800 Rupees Immediately', 'Reward_today': 800, 'Future_reward': 4000, 'delay': 180},
      {'FixedEntry': '800 Rupees Immediately', 'VariableEntry': '1000 Rupees in 180 Days', 'Reward_today': 800, 'Future_reward': 1000, 'delay': 180},
      {'FixedEntry': '25000 Rupees in 365 Days', 'VariableEntry': '500 Rupees Immediately', 'Reward_today': 500, 'Future_reward': 25000, 'delay': 365}]
    Routine trial
    Routine blank
  LoopTerminator trials
